PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Behavioral_MBCA
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Routines
  Routine Instructions
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Ins
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Hello, in this task you will be presented with two separate images of a face and a house. You will see points overlayed on these images that you can gamble for. Each image will have an independent probability of leading to that amount of reward. Once you see the choose screen, you will indicate which image you'd like to gamble for with the left and right arrow key. Press left for face and right for house. Based on the number of points you get at the end you will receive a cash payout! To start we will first be performing a few practice rounds. When you're ready press the spacebar to continue. 
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  Routine iti
    ImageComponent jitter1
      image [set every repeat] = $imageFix
      pos [set every repeat] = (0, 0)
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine stim_presentation1
    ImageComponent stim1
      image [set every repeat] = $imageFile
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent fix
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    TextComponent prob1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option1
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  Routine stim_presentation2
    ImageComponent stim2
      image [set every repeat] = $imageFile2
      size = (400, 400)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent fix2
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    TextComponent prob2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option2
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  Routine choice
    TextComponent Choice
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Choose
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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  Routine long_delay
    ImageComponent fix3
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      units = pix
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  Routine Outcome
    TextComponent reveal
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option1
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    TextComponent tutorial_text1
      color = black
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $outcometext
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    ImageComponent fix5
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent outcome_circle
      image [set every repeat] = $outcome
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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  Routine iti2
    ImageComponent fix4
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = pix
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  Routine counterfactual
    TextComponent reveal2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $option2
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    TextComponent tutorialtext2
      color = black
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      text [set every repeat] = $counterfactualtext
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    ImageComponent fix6
      image [set every repeat] = $imageFix
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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    ImageComponent counter_square
      image [set every repeat] = $counterfactual
      size = (1280, 720)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = pix
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  Routine practice_end
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This concludes the practice. Press the spacebar when ready to continue to the actual trials. 
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Flow
  Routine Instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = piloting.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 15), ('option2', 35), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('outcometext', 'Win'), ('counterfactualtext', 'Loss'), ('corr', 'left')]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 25), ('option2', 55), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('outcometext', 'Loss'), ('counterfactualtext', 'Win'), ('corr', 'right')]),
      OrderedDict([('imageFile', 'stimuli/Face1.jpg'), ('imageFile2', 'stimuli/house1.png'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 55), ('option2', 10), ('outcome', 'stimuli/green_circle.PNG'), ('counterfactual', 'stimuli/red_square.PNG'), ('outcometext', 'Win'), ('counterfactualtext', 'Loss'), ('corr', 'left')]),
      OrderedDict([('imageFile', 'stimuli/house1.png'), ('imageFile2', 'stimuli/Face1.jpg'), ('imageFix', 'stimuli/Fixation.png'), ('option1', 20), ('option2', 30), ('outcome', 'stimuli/red_circle.PNG'), ('counterfactual', 'stimuli/green_square.PNG'), ('outcometext', 'Loss'), ('counterfactualtext', 'Win'), ('corr', 'right')])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
    Routine iti
    Routine stim_presentation1
    Routine iti
    Routine stim_presentation2
    Routine iti
    Routine choice
    Routine long_delay
    Routine Outcome
    Routine iti2
    Routine counterfactual
  LoopTerminator practice
  Routine practice_end
